WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(Cam1, Cam2, Cam3, Cam4, Cam5, Cam6)
-> GroupWorkflow "Define Cam and Timer"
    ExternalizedMapping(Index(DisplayName=Cam1))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Manual))
    -> PublishSubject Cam1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp)
    -> PublishSubject Timer

    ExternalizedMapping(Index(DisplayName=Cam2))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Manual))
    -> PublishSubject Cam2

    ExternalizedMapping(Index(DisplayName=Cam3))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Manual))
    -> PublishSubject Cam3

    ExternalizedMapping(Index(DisplayName=Cam4))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Manual))
    -> PublishSubject Cam4

    ExternalizedMapping(Index(DisplayName=Cam5))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Manual))
    -> PublishSubject Cam5

    ExternalizedMapping(Index(DisplayName=Cam6))
    -> Bonsai.Video.VideoCaptureDevice
      Index=0
      Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=16)
      CaptureProperties(CameraProperty(Property=Exposure, Value=0, ControlFlags=Manual))
    -> PublishSubject Cam6

ExternalizedMapping(Value(DisplayName=Base_Filename))
-> StringProperty(Value=FED)
-> BehaviorSubject rootpath

ExternalizedMapping(Value(DisplayName=vedio_len_Hr))
-> IntProperty(Value=1)
-> Multiply(Operand=IntProperty(Value=108000))
-> PublishSubject video_len

ExternalizedMapping(PortName(DisplayName=Arduino_port))
-> Disable Bonsai.Arduino.CreateArduino(Name=Arduino, PortName=COM10, BaudRate=57600, SamplingInterval=10)

SubscribeSubject Timer => #11
ExternalizedMapping(Start(DisplayName=SessionStart)) => #12
#11, #12 -> GroupWorkflow SessionStart
    WorkflowInput Source1
    -> MemberSelector(Selector=TimeOfDay) => #1
    ExternalizedMapping(Value(DisplayName=Start)) => #2
    #1, #2 -> GreaterThan(Operand=TimeSpanProperty(Value=PT17H))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> Take(Count=1) => #14
ExternalizedMapping(End(DisplayName=SessionEnd)) => #15
#14, #15 -> SelectMany SaveUntil
    GroupWorkflow SavePelletCOunt
        ExternalizedMapping(Pin(DisplayName=FED1))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=2)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #2
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED1.csv, Selector=it)
        -> PropertyMapping(FileName) => #5
        #2, #5 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED1_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED2))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=3)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #10
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED2.csv, Selector=it)
        -> PropertyMapping(FileName) => #13
        #10, #13 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED2_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED3))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=4)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #18
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED3.csv, Selector=it)
        -> PropertyMapping(FileName) => #21
        #18, #21 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED3_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED4))
        -> Bonsai.Arduino.DigitalInput(PortName=COM10, Pin=5)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #26
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED4.csv, Selector=it)
        -> PropertyMapping(FileName) => #29
        #26, #29 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED4_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED5))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=6)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #34
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED5.csv, Selector=it)
        -> PropertyMapping(FileName) => #37
        #34, #37 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED5_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED6))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=7)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #42
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED6.csv, Selector=it)
        -> PropertyMapping(FileName) => #45
        #42, #45 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED6_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED7))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=8)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #50
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED7.csv, Selector=it)
        -> PropertyMapping(FileName) => #53
        #50, #53 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED7_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED8))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=9)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #58
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED8.csv, Selector=it)
        -> PropertyMapping(FileName) => #61
        #58, #61 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED8_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED9))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=10)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #66
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED9.csv, Selector=it)
        -> PropertyMapping(FileName) => #69
        #66, #69 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED9_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED10))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=11)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #74
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED10.csv, Selector=it)
        -> PropertyMapping(FileName) => #77
        #74, #77 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED10_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED11))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=12)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #82
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED11.csv, Selector=it)
        -> PropertyMapping(FileName) => #85
        #82, #85 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED11_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

        ExternalizedMapping(Pin(DisplayName=FED12))
        -> Bonsai.Arduino.DigitalInput(PortName=Arduino, Pin=13)
        -> GroupWorkflow PelletCount(Description="Count the pellet taken") => #90
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform EventCount => #1
              Script:
                count = 0

                @returns(int)
                def process(value):
                  global count
                  if value:
                    count=count+1

                  return count
            #0 -> Timestamp => #2
            -> MemberSelector(Selector=Timestamp) => #3
            #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
            #2 -> Bonsai.Scripting.IronPython.PythonTransform Event => #5
              Description="check event based on pulse duration"
              Script:
                event = ''
                startTime = 0
                duration = 0

                @returns(str)
                def process(value):
                  global startTime,duration
                  event = ''
                  if value.Value:
                    startTime = value.Timestamp.TimeOfDay.TotalMilliseconds

                  else:
                    duration = value.Timestamp.TimeOfDay.TotalMilliseconds - startTime

                    if duration> 190 and duration<210:
                      event='pellet'
                    elif duration> 90 and duration<190:
                      event='start'

                  return event
            -> Bonsai.Scripting.IronPython.PythonTransform PelletCount => #6
              Script:
                count = 0
                @returns(int)
                def process(value):
                  global count
                  if value == "pellet":
                    count=count+1
                  return count
            #1, #3, #4, #6, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as TimeOfDay,
                Item3 as MilliSecond,
                Item1 as EventCount,
                Item4 as PelletCount,
                Item5 as Event
                )
            -> WorkflowOutput
        SubscribeSubject rootpath
        -> Format(Format={0}_FED12.csv, Selector=it)
        -> PropertyMapping(FileName) => #93
        #90, #93 -> Bonsai.IO.CsvWriter(FileName=test\ZY_FED12_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> MemberSelector(Selector=PelletCount)

    SubscribeSubject Timer => #1
    -> MemberSelector(Selector=TimeOfDay) => #2
    #1 -> GroupWorkflow NextDay
        WorkflowInput Source1
        -> MemberSelector(Selector=TimeOfDay) => #1
        -> Skip(Count=1) => #2
        #2, #1 -> Zip
        -> LessThan
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> Take(Count=1) => #4
    #2, #4 -> SkipUntil => #5
    ExternalizedMapping(Value(DisplayName=End)) => #6
    #5, #6 -> GreaterThan(Operand=TimeSpanProperty(Value=PT13H))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat
#14 -> Delay(DueTime=PT2S)
-> SelectMany A1_out
    BooleanProperty(Value=false)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM10, Pin=15) => #1
    ExternalizedMapping(DueTime) => #2
    #1, #2 -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> Bonsai.Arduino.DigitalOutput(PortName=COM10, Pin=15)

SubscribeSubject Cam1
-> Timestamp => #21
SubscribeSubject rootpath
-> Format(Format={0}_Cam1.csv, Selector=it)
-> PropertyMapping(FileName) => #24
#21, #24 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp, Timestamp.TimeOfDay.TotalMilliseconds"
-> MemberSelector(Selector=Value) => #26
SubscribeSubject rootpath
-> Format(Format={0}_Cam1.avi, Selector=it)
-> PropertyMapping(FileName) => #29
#26, #29 -> Bonsai.Vision.VideoWriter => #30
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #32
#30, #32 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam2
-> Timestamp => #36
SubscribeSubject rootpath
-> Format(Format={0}_Cam2.csv, Selector=it)
-> PropertyMapping(FileName) => #39
#36, #39 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp, Timestamp.TimeOfDay.TotalMilliseconds"
-> MemberSelector(Selector=Value) => #41
SubscribeSubject rootpath
-> Format(Format={0}_Cam2.avi, Selector=it)
-> PropertyMapping(FileName) => #44
#41, #44 -> Bonsai.Vision.VideoWriter => #45
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #47
#45, #47 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam3
-> Timestamp => #51
SubscribeSubject rootpath
-> Format(Format={0}_Cam3.csv, Selector=it)
-> PropertyMapping(FileName) => #54
#51, #54 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp, Timestamp.TimeOfDay.TotalMilliseconds"
-> MemberSelector(Selector=Value) => #56
SubscribeSubject rootpath
-> Format(Format={0}_Cam3.avi, Selector=it)
-> PropertyMapping(FileName) => #59
#56, #59 -> Bonsai.Vision.VideoWriter => #60
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #62
#60, #62 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam4
-> Timestamp => #66
SubscribeSubject rootpath
-> Format(Format={0}_Cam4.csv, Selector=it)
-> PropertyMapping(FileName) => #69
#66, #69 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp, Timestamp.TimeOfDay.TotalMilliseconds"
-> MemberSelector(Selector=Value) => #71
SubscribeSubject rootpath
-> Format(Format={0}_Cam4.avi, Selector=it)
-> PropertyMapping(FileName) => #74
#71, #74 -> Bonsai.Vision.VideoWriter => #75
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #77
#75, #77 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam5
-> Timestamp => #81
SubscribeSubject rootpath
-> Format(Format={0}_Cam5.csv, Selector=it)
-> PropertyMapping(FileName) => #84
#81, #84 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp, Timestamp.TimeOfDay.TotalMilliseconds"
-> MemberSelector(Selector=Value) => #86
SubscribeSubject rootpath
-> Format(Format={0}_Cam5.avi, Selector=it)
-> PropertyMapping(FileName) => #89
#86, #89 -> Bonsai.Vision.VideoWriter => #90
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #92
#90, #92 -> Take(Count=108000)
-> Repeat

SubscribeSubject Cam6
-> Timestamp => #96
SubscribeSubject rootpath
-> Format(Format={0}_Cam6.csv, Selector=it)
-> PropertyMapping(FileName) => #99
#96, #99 -> Bonsai.IO.CsvWriter
  FileName=test_data.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp, Timestamp.TimeOfDay.TotalMilliseconds"
-> MemberSelector(Selector=Value) => #101
SubscribeSubject rootpath
-> Format(Format={0}_Cam6.avi, Selector=it)
-> PropertyMapping(FileName) => #104
#101, #104 -> Bonsai.Vision.VideoWriter => #105
  FileName=test_video.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject video_len
-> PropertyMapping(Count) => #107
#105, #107 -> Take(Count=108000)
-> Repeat
